WorkflowBuilder(Version=2.3.0)
Bonsai.IO.CsvReader(FileName=training2_half2.csv, SkipRows=0) => #6
SubscribeSubject next => #7
-> Timestamp
-> Bonsai.IO.TextWriter(FileName=debug\selectmany_tst.txt, Suffix=FileCount, Buffered=true, Overwrite=false, Append=false)
#7 -> Bonsai.Scripting.ExpressionCondition => #8
  Expression: it==True
#6, #8 -> Zip
-> SelectMany main_flow => #12
    Bonsai.Vision.CameraCapture(Index=0, CaptureProperties(CapturePropertyAssignment(Property=PosFrames, Value=0))) => #9
    -> Bonsai.Vision.VideoWriter
      FileName=test_.avi
      Suffix=FileCount
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    #9 -> NestedWorkflow rois => #21
        WorkflowInput Source1
        -> Bonsai.Vision.Flip(Mode=Vertical)
        -> Bonsai.Vision.Flip(Mode=Horizontal)
        -> Bonsai.Vision.Grayscale
        -> Bonsai.Vision.Threshold(ThresholdValue=53, MaxValue=255, ThresholdType=BinaryInv)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=5, MaxArea=2000)
        -> Bonsai.Vision.DrawContours(MaxLevel=1, Thickness=-1)
        -> Bonsai.Vision.RoiActivity
          Regions
            ArrayOfPoint(Point(X=280, Y=335), Point(X=310, Y=335), Point(X=310, Y=410), Point(X=280, Y=410), Point(X=280, Y=410))
            ArrayOfPoint(Point(X=148, Y=104), Point(X=218, Y=104), Point(X=218, Y=144), Point(X=148, Y=144))
            ArrayOfPoint(Point(X=390, Y=104), Point(X=464, Y=104), Point(X=464, Y=148), Point(X=390, Y=148))
            ArrayOfPoint(Point(X=54, Y=95), Point(X=98, Y=95), Point(X=98, Y=137), Point(X=54, Y=137))
            ArrayOfPoint(Point(X=514, Y=107), Point(X=558, Y=107), Point(X=558, Y=149), Point(X=514, Y=149))
            ArrayOfPoint
              Point(X=59, Y=250)
              Point(X=96, Y=250)
              Point(X=96, Y=322)
              Point(X=118, Y=352)
              Point(X=124, Y=365)
              Point(X=182, Y=376)
              Point(X=180, Y=386)
              Point(X=104, Y=384)
              Point(X=96, Y=374)
              Point(X=58, Y=354)
            ArrayOfPoint
              Point(X=406, Y=366)
              Point(X=506, Y=360)
              Point(X=512, Y=340)
              Point(X=530, Y=297)
              Point(X=529, Y=250)
              Point(X=548, Y=230)
              Point(X=540, Y=350)
              Point(X=527, Y=374)
              Point(X=409, Y=384)
            ArrayOfPoint(Point(X=281, Y=103), Point(X=325, Y=103), Point(X=326, Y=246), Point(X=280, Y=246))
        -> WorkflowOutput
    -> Take(Count=1) => #8
    WorkflowInput Source1
    -> MemberSelector(Selector=Source.Item1) => #18
    #8, #18 -> Zip
    -> Bonsai.Scripting.PythonTransform => #7
      Script:
        @returns(str)
        def process(value):
          return value[1]
    -> Bonsai.Scripting.ExpressionCondition => #5
      Expression: it=="rf"
    #21, #5 -> NestedWorkflow right_forced => #3
        WorkflowInput Source1 => #14
        -> NestedWorkflow right_return => #3
            WorkflowInput Source1
            -> Bonsai.Vision.RoiActivityDetected(Index=6, Threshold=30000)
            -> DistinctUntilChanged
            -> Bonsai.Scripting.ExpressionCondition
              Expression: it == True
            -> WorkflowOutput
        #14 -> NestedWorkflow right_reward => #7
            WorkflowInput Source1
            -> Bonsai.Vision.RoiActivityDetected(Index=4, Threshold=1000)
            -> DistinctUntilChanged
            -> Bonsai.Scripting.ExpressionCondition
              Expression: it == True
            -> WorkflowOutput
        #14 -> NestedWorkflow right_turn => #11
            WorkflowInput Source1
            -> Bonsai.Vision.RoiActivityDetected(Index=2, Threshold=1000)
            -> DistinctUntilChanged
            -> Bonsai.Scripting.ExpressionCondition
              Expression: it == True
            -> WorkflowOutput
        #14 -> NestedWorkflow leave_start => #17
            WorkflowInput Source1
            -> Bonsai.Vision.RoiActivityDetected(Index=7, Threshold=1000)
            -> DistinctUntilChanged
            -> Bonsai.Scripting.ExpressionCondition
              Expression: it == True
            -> WorkflowOutput
        WorkflowInput Source2
        -> Bonsai.Scripting.PythonTransform ctxB
          Script:
            @returns(str)
            def process(value):
              import clr
              clr.AddReference('System.Web.Extensions')
              from System.Web.Script.Serialization import JavaScriptSerializer
              from System.Net import *
              from System import Convert
              from System.Text import Encoding
              import urllib
              import httplib
              import time

              token = 'r03risfvqROsqTcuB3MAzgDkUhHUw6Qn'

              connection =  httplib.HTTPConnection('192.168.62.102:16021')
              body_content = '{"select" : "kont.B (automated t-maze) 2019"}'
              connection.request('PUT', '/api/v1/' + token + '/effects', body_content)
              result = connection.getresponse()
              body_content = '{"brightness" : {"value":56}}'
              connection.request('PUT', '/api/v1/' + token + '/state', body_content)

              client = WebClient()
              client.Headers[HttpRequestHeader.ContentType] = 'application/json'

              return str(value).lower()
        -> NestedWorkflow open_doors_rf => #12
            WorkflowInput Source1
            -> StringProperty(Value=-2)
            -> Bonsai.IO.SerialStringWrite(PortName=COM3, NewLine=\n)
            -> StringProperty(Value=-1)
            -> Bonsai.IO.SerialStringWrite(PortName=COM4, NewLine=\n)
            -> WorkflowOutput
        #17, #12 -> SkipUntil
        -> Take(Count=1)
        -> NestedWorkflow cls_start => #19
            WorkflowInput Source1
            -> StringProperty(Value=1)
            -> Bonsai.IO.SerialStringWrite(PortName=COM4, NewLine=\n)
            -> WorkflowOutput
        #11, #19 -> SkipUntil
        -> Take(Count=1)
        -> NestedWorkflow drs_reward => #8
            WorkflowInput Source1
            -> StringProperty(Value=2)
            -> Bonsai.IO.SerialStringWrite(PortName=COM3, NewLine=\n)
            -> StringProperty(Value=10)
            -> Bonsai.IO.SerialStringWrite(PortName=COM5, NewLine=\n)
            -> WorkflowOutput
        #7, #8 -> SkipUntil
        -> Take(Count=1)
        -> NestedWorkflow opn_drs_r_reward => #4
            WorkflowInput Source1
            -> StringProperty(Value=-3)
            -> Bonsai.IO.SerialStringWrite(PortName=COM4, NewLine=\n)
            -> StringProperty(Value="-3,1")
            -> Bonsai.IO.SerialStringWrite(PortName=COM3, NewLine=\n)
            -> WorkflowOutput
        #3, #4 -> SkipUntil
        -> Take(Count=1)
        -> NestedWorkflow cls_dr_r_ret
            WorkflowInput Source1
            -> IntProperty(Value=3)
            -> Bonsai.IO.SerialStringWrite(PortName=COM4, NewLine=\n)
            -> WorkflowOutput
        -> WorkflowOutput
    #7 -> Bonsai.Scripting.ExpressionCondition => #6
      Expression: it=="lf"
    #21, #6 -> NestedWorkflow left_forced => #4
        WorkflowInput Source1 => #14
        -> NestedWorkflow left_return => #3
            WorkflowInput Source1
            -> Bonsai.Vision.RoiActivityDetected(Index=5, Threshold=30000)
            -> DistinctUntilChanged
            -> Bonsai.Scripting.ExpressionCondition
              Expression: it == True
            -> WorkflowOutput
        #14 -> NestedWorkflow left_reward => #7
            WorkflowInput Source1
            -> Bonsai.Vision.RoiActivityDetected(Index=3, Threshold=1000)
            -> DistinctUntilChanged
            -> Bonsai.Scripting.ExpressionCondition
              Expression: it == True
            -> WorkflowOutput
        #14 -> NestedWorkflow left_turn => #11
            WorkflowInput Source1
            -> Bonsai.Vision.RoiActivityDetected(Index=1, Threshold=1000)
            -> DistinctUntilChanged
            -> Bonsai.Scripting.ExpressionCondition
              Expression: it == True
            -> WorkflowOutput
        #14 -> NestedWorkflow leave_start => #20
            WorkflowInput Source1
            -> Bonsai.Vision.RoiActivityDetected(Index=7, Threshold=1000)
            -> DistinctUntilChanged
            -> Bonsai.Scripting.ExpressionCondition
              Expression: it == True
            -> WorkflowOutput
        WorkflowInput Source2
        -> Bonsai.Scripting.PythonTransform ctxA
          Script:
            @returns(str)
            def process(value):
              import clr
              clr.AddReference('System.Web.Extensions')
              from System.Web.Script.Serialization import JavaScriptSerializer
              from System.Net import *
              from System import Convert
              from System.Text import Encoding
              import urllib
              import httplib
              import time

              token = 'r03risfvqROsqTcuB3MAzgDkUhHUw6Qn'

              connection =  httplib.HTTPConnection('192.168.62.102:16021')
              body_content = '{"select" : "kont.A (automated t-maze) 2019"}'
              connection.request('PUT', '/api/v1/' + token + '/effects', body_content)
              result = connection.getresponse()
              body_content = '{"brightness" : {"value":50}}'
              connection.request('PUT', '/api/v1/' + token + '/state', body_content)

              client = WebClient()
              client.Headers[HttpRequestHeader.ContentType] = 'application/json'

              return str(value).lower()
        -> NestedWorkflow open_doors_lf => #12
            WorkflowInput Source1
            -> StringProperty(Value=-4)
            -> Bonsai.IO.SerialStringWrite(PortName=COM3, NewLine=\n)
            -> StringProperty(Value=-1)
            -> Bonsai.IO.SerialStringWrite(PortName=COM4, NewLine=\n)
            -> WorkflowOutput
        #20, #12 -> SkipUntil
        -> Take(Count=1)
        -> NestedWorkflow cls_start => #18
            WorkflowInput Source1
            -> StringProperty(Value=1)
            -> Bonsai.IO.SerialStringWrite(PortName=COM4, NewLine=\n)
            -> WorkflowOutput
        #11, #18 -> SkipUntil
        -> Take(Count=1)
        -> NestedWorkflow cls_drs_lf => #8
            WorkflowInput Source1
            -> StringProperty(Value=4)
            -> Bonsai.IO.SerialStringWrite(PortName=COM3, NewLine=\n)
            -> StringProperty(Value=-10)
            -> Bonsai.IO.SerialStringWrite(PortName=COM5, NewLine=\n)
            -> WorkflowOutput
        #7, #8 -> SkipUntil
        -> Take(Count=1)
        -> NestedWorkflow opn_drs_l_reward => #4
            WorkflowInput Source1
            -> IntProperty(Value=-2)
            -> Bonsai.IO.SerialStringWrite(PortName=COM4, NewLine=\n)
            -> StringProperty(Value="-1,3")
            -> Bonsai.IO.SerialStringWrite(PortName=COM3, NewLine=\n)
            -> WorkflowOutput
        #3, #4 -> SkipUntil
        -> Take(Count=1)
        -> NestedWorkflow cls_dr_l_ret
            WorkflowInput Source1
            -> IntProperty(Value=2)
            -> Bonsai.IO.SerialStringWrite(PortName=COM4, NewLine=\n)
            -> WorkflowOutput
        -> WorkflowOutput
    #7 -> Bonsai.Scripting.ExpressionCondition => #14
      Expression: it=="r" or it=="l"
    #21, #14 -> NestedWorkflow choice => #15
        WorkflowInput Source1 => #13
        -> NestedWorkflow right_turn => #11
            WorkflowInput Source1
            -> Bonsai.Vision.RoiActivityDetected(Index=2, Threshold=1000)
            -> DistinctUntilChanged
            -> WorkflowOutput
        #13 -> NestedWorkflow left_turn => #16
            WorkflowInput Source1
            -> Bonsai.Vision.RoiActivityDetected(Index=1, Threshold=1000)
            -> DistinctUntilChanged
            -> WorkflowOutput
        #13 -> NestedWorkflow leave_start => #28
            WorkflowInput Source1
            -> Bonsai.Vision.RoiActivityDetected(Index=7, Threshold=1000)
            -> DistinctUntilChanged
            -> Bonsai.Scripting.ExpressionCondition
              Expression: it == True
            -> WorkflowOutput
        WorkflowInput Source2 => #14
        -> Bonsai.Scripting.ExpressionCondition => #17
          Expression: it=="l"
        -> Bonsai.Scripting.PythonTransform ctxA => #21
          Script:
            @returns(str)
            def process(value):
              import clr
              clr.AddReference('System.Web.Extensions')
              from System.Web.Script.Serialization import JavaScriptSerializer
              from System.Net import *
              from System import Convert
              from System.Text import Encoding
              import urllib
              import httplib
              import time

              token = 'r03risfvqROsqTcuB3MAzgDkUhHUw6Qn'

              connection =  httplib.HTTPConnection('192.168.62.102:16021')
              body_content = '{"select" : "kont.A (automated t-maze) 2019"}'
              connection.request('PUT', '/api/v1/' + token + '/effects', body_content)
              result = connection.getresponse()
              body_content = '{"brightness" : {"value":50}}'
              connection.request('PUT', '/api/v1/' + token + '/state', body_content)

              client = WebClient()
              client.Headers[HttpRequestHeader.ContentType] = 'application/json'

              return str(value).lower()
        #14 -> Bonsai.Scripting.ExpressionCondition => #20
          Expression: it=="r"
        -> Bonsai.Scripting.PythonTransform ctxB => #32
          Script:
            @returns(str)
            def process(value):
              import clr
              clr.AddReference('System.Web.Extensions')
              from System.Web.Script.Serialization import JavaScriptSerializer
              from System.Net import *
              from System import Convert
              from System.Text import Encoding
              import urllib
              import httplib
              import time

              token = 'r03risfvqROsqTcuB3MAzgDkUhHUw6Qn'

              connection =  httplib.HTTPConnection('192.168.62.102:16021')
              body_content = '{"select" : "kont.B (automated t-maze) 2019"}'
              connection.request('PUT', '/api/v1/' + token + '/effects', body_content)
              result = connection.getresponse()
              body_content = '{"brightness" : {"value":56}}'
              connection.request('PUT', '/api/v1/' + token + '/state', body_content)

              client = WebClient()
              client.Headers[HttpRequestHeader.ContentType] = 'application/json'

              return str(value).lower()
        #21, #32 -> Merge
        -> NestedWorkflow open_d_choice => #12
            WorkflowInput Source1
            -> StringProperty(Value="-2,-4")
            -> Bonsai.IO.SerialStringWrite(PortName=COM3, NewLine=\n)
            -> StringProperty(Value=-1)
            -> Bonsai.IO.SerialStringWrite(PortName=COM4, NewLine=\n)
            -> WorkflowOutput
        #28, #12 -> SkipUntil
        -> Take(Count=1)
        -> NestedWorkflow cls_start => #31
            WorkflowInput Source1
            -> StringProperty(Value=1)
            -> Bonsai.IO.SerialStringWrite(PortName=COM4, NewLine=\n)
            -> WorkflowOutput
        #16, #31 -> SkipUntil => #8
        #11, #31 -> SkipUntil => #10
        #8, #10 -> Merge
        -> Bonsai.Scripting.ExpressionCondition => #18
          Expression: it
        #8, #18 -> TakeUntil
        -> Bonsai.Scripting.ExpressionCondition => #1
          Expression: it
        #20, #1 -> Zip => #2
        #13, #2 -> NestedWorkflow l_no_reward => #6
            WorkflowInput Source1
            -> NestedWorkflow left_return => #1
                WorkflowInput Source1
                -> Bonsai.Vision.RoiActivityDetected(Index=5, Threshold=30000)
                -> DistinctUntilChanged
                -> Bonsai.Scripting.ExpressionCondition
                  Expression: it == True
                -> WorkflowOutput
            WorkflowInput Source2
            -> NestedWorkflow n_rew_ret_drs => #6
                WorkflowInput Source1
                -> StringProperty(Value="4,2,3,-1")
                -> Bonsai.IO.SerialStringWrite(PortName=COM3, NewLine=\n)
                -> StringProperty(Value=-2)
                -> Bonsai.IO.SerialStringWrite(PortName=COM4, NewLine=\n)
                -> WorkflowOutput
            #1, #6 -> SkipUntil
            -> Take(Count=1)
            -> NestedWorkflow cls_l_ret
                WorkflowInput Source1
                -> StringProperty(Value=2)
                -> Bonsai.IO.SerialStringWrite(PortName=COM4, NewLine=\n)
                -> WorkflowOutput
            -> WorkflowOutput
        #1, #17 -> Zip => #23
        #13, #23 -> NestedWorkflow l_with_reward => #7
            WorkflowInput Source1 => #3
            -> NestedWorkflow left_return => #0
                WorkflowInput Source1
                -> Bonsai.Vision.RoiActivityDetected(Index=5, Threshold=30000)
                -> DistinctUntilChanged
                -> Bonsai.Scripting.ExpressionCondition
                  Expression: it == True
                -> WorkflowOutput
            #3 -> NestedWorkflow left_reward => #2
                WorkflowInput Source1
                -> Bonsai.Vision.RoiActivityDetected(Index=3, Threshold=1000)
                -> DistinctUntilChanged
                -> Bonsai.Scripting.ExpressionCondition
                  Expression: it == True
                -> WorkflowOutput
            WorkflowInput Source2
            -> NestedWorkflow cls_d_choice => #6
                WorkflowInput Source1
                -> StringProperty(Value="4,2")
                -> Bonsai.IO.SerialStringWrite(PortName=COM3, NewLine=\n)
                -> StringProperty(Value=-10)
                -> Bonsai.IO.SerialStringWrite(PortName=COM5, NewLine=\n)
                -> WorkflowOutput
            #2, #6 -> SkipUntil
            -> Take(Count=1)
            -> NestedWorkflow open_return => #7
                WorkflowInput Source1
                -> StringProperty(Value=-2)
                -> Bonsai.IO.SerialStringWrite(PortName=COM4, NewLine=\n)
                -> WorkflowOutput
            #0, #7 -> SkipUntil
            -> Take(Count=1)
            -> NestedWorkflow return_doors
                WorkflowInput Source1
                -> StringProperty(Value=2)
                -> Bonsai.IO.SerialStringWrite(PortName=COM4, NewLine=\n)
                -> StringProperty(Value="3,-1")
                -> Bonsai.IO.SerialStringWrite(PortName=COM3, NewLine=\n)
                -> WorkflowOutput
            -> WorkflowOutput
        #10, #18 -> TakeUntil
        -> Bonsai.Scripting.ExpressionCondition => #0
          Expression: it
        #20, #0 -> Zip => #25
        #13, #25 -> NestedWorkflow r_with_reward => #3
            WorkflowInput Source1 => #1
            -> NestedWorkflow right_reward => #8
                WorkflowInput Source1
                -> Bonsai.Vision.RoiActivityDetected(Index=4, Threshold=1000)
                -> DistinctUntilChanged
                -> Bonsai.Scripting.ExpressionCondition
                  Expression: it == True
                -> WorkflowOutput
            #1 -> NestedWorkflow right_return => #9
                WorkflowInput Source1
                -> Bonsai.Vision.RoiActivityDetected(Index=6, Threshold=30000)
                -> DistinctUntilChanged
                -> Bonsai.Scripting.ExpressionCondition
                  Expression: it == True
                -> WorkflowOutput
            WorkflowInput Source2
            -> NestedWorkflow drs_reward => #4
                WorkflowInput Source1
                -> StringProperty(Value="4,2")
                -> Bonsai.IO.SerialStringWrite(PortName=COM3, NewLine=\n)
                -> StringProperty(Value=10)
                -> Bonsai.IO.SerialStringWrite(PortName=COM5, NewLine=\n)
                -> WorkflowOutput
            #8, #4 -> SkipUntil
            -> Take(Count=1)
            -> NestedWorkflow open_return => #5
                WorkflowInput Source1
                -> StringProperty(Value=-3)
                -> Bonsai.IO.SerialStringWrite(PortName=COM4, NewLine=\n)
                -> WorkflowOutput
            #9, #5 -> SkipUntil
            -> Take(Count=1)
            -> NestedWorkflow return_doors
                WorkflowInput Source1
                -> StringProperty(Value=3)
                -> Bonsai.IO.SerialStringWrite(PortName=COM4, NewLine=\n)
                -> StringProperty(Value="1,-3")
                -> Bonsai.IO.SerialStringWrite(PortName=COM3, NewLine=\n)
                -> WorkflowOutput
            -> WorkflowOutput
        #17, #0 -> Zip => #26
        #13, #26 -> NestedWorkflow r_no_reward => #27
            WorkflowInput Source1
            -> NestedWorkflow right_return => #6
                WorkflowInput Source1
                -> Bonsai.Vision.RoiActivityDetected(Index=6, Threshold=30000)
                -> DistinctUntilChanged
                -> Bonsai.Scripting.ExpressionCondition
                  Expression: it == True
                -> WorkflowOutput
            WorkflowInput Source2
            -> NestedWorkflow n_rew_ret_drs => #5
                WorkflowInput Source1
                -> StringProperty(Value="4,2,1,-3")
                -> Bonsai.IO.SerialStringWrite(PortName=COM3, NewLine=\n)
                -> StringProperty(Value=-3)
                -> Bonsai.IO.SerialStringWrite(PortName=COM4, NewLine=\n)
                -> WorkflowOutput
            #6, #5 -> SkipUntil
            -> Take(Count=1)
            -> NestedWorkflow cls_l_ret
                WorkflowInput Source1
                -> StringProperty(Value=3)
                -> Bonsai.IO.SerialStringWrite(PortName=COM4, NewLine=\n)
                -> WorkflowOutput
            -> WorkflowOutput
        #6, #7, #3, #27 -> Merge
        -> IntProperty(Value=0)
        -> WorkflowOutput
    #3, #4, #15 -> Merge
    -> Delay(DueTime=PT4S)
    -> BooleanProperty(Value=true) => #1
    -> MulticastSubject next => #0
    #0, #1 -> TakeUntil => #19
    -> WorkflowOutput
    #19 -> Bonsai.IO.TextWriter(FileName=debug\done.txt, Suffix=FileCount, Buffered=true, Overwrite=false, Append=false)
    #15 -> Bonsai.IO.TextWriter(FileName=debug\to_enter_choice.txt, Suffix=FileCount, Buffered=true, Overwrite=false, Append=false)
-> Timestamp
-> Bonsai.IO.TextWriter(FileName=debug\selectmany_lf.txt, Suffix=FileCount, Buffered=true, Overwrite=false, Append=false)
#12 -> Delay(DueTime=PT2S)
-> BooleanProperty(Value=false)
-> MulticastSubject next

BooleanProperty(Value=true)
-> Bonsai.Scripting.PythonTransform ctx_neutral
  Script:
    @returns(str)
    def process(value):
      import clr
      clr.AddReference('System.Web.Extensions')
      from System.Web.Script.Serialization import JavaScriptSerializer
      from System.Net import *
      from System import Convert
      from System.Text import Encoding
      import urllib
      import httplib
      import time

      token = 'r03risfvqROsqTcuB3MAzgDkUhHUw6Qn'

      connection =  httplib.HTTPConnection('192.168.62.102:16021')
      body_content = '{"select" : "kont. neutral (automated t-maze) 2019"}'
      connection.request('PUT', '/api/v1/' + token + '/effects', body_content)
      result = connection.getresponse()
      body_content = '{"brightness" : {"value":65}}'
      connection.request('PUT', '/api/v1/' + token + '/state', body_content)

      client = WebClient()
      client.Headers[HttpRequestHeader.ContentType] = 'application/json'

      return str(value).lower()

Bonsai.Windows.Input.KeyDown(Filter=C)
-> BooleanProperty(Value=true)
-> BehaviorSubject next
